PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1.000,-1.000,-0.498]
  expName = pvt
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        react_clock = clock.Clock()
        rt = 0
        s_rt = ""
      Begin Routine:
        react_clock.reset()
        rt = 0
        s_rt = ""
        # If user pressed the key before we begin, that's a falseStart.
        # Skip this routine.
        if falseStart:
            continueRoutine = False
      Each Frame:
        rt = react_clock.getTime()
        s_rt = "{0:d}".format(int(1000*rt))
      End Routine:
        # Accorrding to Dinges paper (see Reference in README.md) anything
        # < 100 mSec is also false start.
        if rt < 0.1:
            falseStart = True

        if falseStart:
            s_rt = "FS!"
        else:
            # Update s_rt for next routine
            s_rt = "{0:d}".format(int(1000*rt))
            # Need one last winFlip to include the final time.
            # Otherwise see pause and then hop when show final time in next routine.
            # Tell the components to draw themselves (PsychoPY turns this
            # off when continueRoutine = False.
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "setAutoDraw"):
                    thisComponent.setAutoDraw(True)
            win.flip()
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "setAutoDraw"):
                    thisComponent.setAutoDraw(False)

        # Force a redraw of rt_rect_active so it has no digits for beginning of next loop.
        # rt_rect_active.draw()


        # Dinges paper <100 mSec = false start.
        if rt < 0.1:
            s_rt = "False start!"
        else:
            s_rt = "{0:d}".format(int(1000*rt))
    PolygonComponent rt_rect_active
      fillColor = $rt_rect_empty.fillColor
      shape = rectangle
      size = (rt_rect_empty.width, rt_rect_empty.height)
      startVal [time (s)] = 0.0
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    TextComponent rt_text_active
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $s_rt
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    KeyboardComponent rt_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = All done! Thanks for taking part.
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        When digits appear in the red box, hit the space bar as quickly as possible.

        Hit the space bar now to start the test.
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine display_rt
    PolygonComponent rt_rect_final
      fillColor = $rt_rect_empty.fillColor
      shape = rectangle
      size = (rt_rect_empty.width, rt_rect_empty.height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent rt_text_final
      color = $rt_text_active.color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $s_rt
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  Routine check_loop
    CodeComponent check_loop_code
      Code Type = Py
      Begin Experiment:
        loop_time = 1*60  #Total time in seconds that we'll take samples. Last trial may run over this time.
      Begin Routine:
        if loop_clock.getTime() >= loop_time:
            trials.finished=True
  Routine initialize_loop
    CodeComponent initialize_loop_clock
      Code Type = Py
      Begin Routine:
        loop_clock = clock.Clock()
  Routine wait
    CodeComponent wait_code
      Code Type = Py
      Begin Experiment:
        falseStart = False
        keys=[]
        sLastKey = ""
      Begin Routine:
        # Clear any pending keyboard events
        event.clearEvents(eventType='keyboard')
        # Start off with no falseStarts
        falseStart = False
        sLastKey = ""
      Each Frame:
        #if event.getKeys(keyList=['space']):
        #    #sLastKey = 'space'
        #    core.quit()
      End Routine:
        # If user typed a key during the wait period that's a false start.
        keys=event.getKeys(keyList=['space'])
        if keys:
            falseStart = True
    PolygonComponent rt_rect_empty
      fillColor = $[1.000,-1.000,-1.000]
      shape = regular polygon...
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $1.0+8*random()
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Flow
  Routine instructions
  Routine initialize_loop
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10000
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    Routine wait
    Routine trial
    Routine display_rt
    Routine check_loop
  LoopTerminator trials
  Routine thanks
